<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='/Users/silvioo/Documents/git_projects/galago-tools/tools/bravo/bravo_molbio.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Bravo SubProcess 1' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value="Don't display" />
						<Parameter Category='Static labware configuration' Name='1' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='2' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='3' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='4' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
						<Parameter Category='Static labware configuration' Name='5' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
						<Parameter Category='Static labware configuration' Name='7' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
						<Parameter Category='Static labware configuration' Name='8' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
						<Parameter Category='Static labware configuration' Name='9' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Bravo SubProcess 1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Bravo SubProcess 1' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='7' />
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						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='5.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='5.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
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						<Parameter Category='Volume' Name='Volume' Value='50.0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='5.0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Initialize axis' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Axis' Value='X' />
						<Parameter Category='' Name='Initialize even if already homed' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
					<Parameter Name='Display confirmation' Value="Don't display" />
					<Parameter Name='1' Value='96 V11 LT250 Tip Box Standard' />
					<Parameter Name='2' Value='96 V11 LT250 Tip Box Standard' />
					<Parameter Name='3' Value='96 V11 LT250 Tip Box Standard' />
					<Parameter Name='4' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					<Parameter Name='5' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					<Parameter Name='6' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					<Parameter Name='7' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					<Parameter Name='8' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
					<Parameter Name='9' Value='96 Greiner 655101 PS Clr Rnd Well Flat Btm' />
				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>